CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (file does endwith "1-MAX_F.tif")
    Name to assign these images:Original
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "1-MAX_3")
    Name to assign these images:Max_local
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "V1NC")
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    Name to assign these objects:V1
    Select the image type:Objects
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    Retain outlines of loaded objects?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:Original
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:32
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:FilteredImage
    Name the primary objects to be identified:Group_centrioles_primary
    Typical diameter of objects, in pixel units (Min,Max):32,175
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MoG
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
    Approximate fraction of image covered by objects?:0.25
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:Group_centrioles_primary
    Name the output objects:Expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:8
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    Retain the outlines of the identified objects?:No
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
EditObjectsManually:[module_num:8|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
    Select the objects to be edited:V1
    Name the edited objects:Group_centrioles_neighbouring
    Retain outlines of the edited objects?:No
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    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Original
    Allow overlapping objects?:No

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Group_centrioles_neighbouring
    Name the output image:PatchesN
    Select the color format:uint16
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:PatchesN
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Edited_V1N
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:Group_centrioles_neighbouring
    Name the output image:PatchesNC
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:PatchesNC
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Edited_V1NC
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:Group_centrioles_neighbouring
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Original
    Text color:yellow
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Edited_V1NCBorder
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:Group_centrioles_neighbouring
    Select neighboring objects to measure:Group_centrioles_neighbouring
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Group_centrioles_neighbouring
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
