CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
    Select the rule criteria:and (file does contain "MAX_F.tif")
    Name to assign these images:Original
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "MAX_3D.tif")
    Name to assign these images:Max_local
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Edited_V1.tif")
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    Name to assign these objects:Object2
    Select the image type:Objects
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    Retain outlines of loaded objects?:No
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    Select the rule criteria:and (file does contain "Overlay.tif")
    Name to assign these images:Overlay
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EditObjectsManually:[module_num:5|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
    Select the objects to be edited:Object2
    Name the edited objects:Group_centrioles
    Retain outlines of the edited objects?:No
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    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Overlay
    Allow overlapping objects?:No

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Max_local
    Name the primary objects to be identified:Centrioles_location
    Typical diameter of objects, in pixel units (Min,Max):1,5
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:0
    Threshold correction factor:4
    Lower and upper bounds on threshold:0.001,1.0
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    Masking objects:Group_centrioles
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MaskObjects:[module_num:7|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
    Select objects to be masked:Centrioles_location
    Name the masked objects:Centrioles_selected
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Group_centrioles
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:Max_local
    Select objects to measure:Centrioles_selected

FilterObjects:[module_num:9|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
    Name the output objects:FilteredBlue
    Select the object to filter:Centrioles_selected
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MaxIntensity_Max_local
    Filter using a minimum measurement value?:Yes
    Minimum value:0.025 
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:FilteredBlue
    Name the output objects:Final_centrioles
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
RelateObjects:[module_num:11|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
    Select the input child objects:Final_centrioles
    Select the input parent objects:Group_centrioles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay2
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#008080
    Load outlines from an image or objects?:Objects
    Select objects to display:Final_centrioles
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    Select outline color:#800000
    Load outlines from an image or objects?:Objects
    Select objects to display:Group_centrioles

ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Group_centrioles
    Name the output image:Patches
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Patches
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Edited_V2
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:OverlayC
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:16|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
    Select objects to measure:Group_centrioles
    Calculate the Zernike features?:No

MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Final_centrioles
    Select neighboring objects to measure:Final_centrioles
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:Group_centrioles
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Overlay
    Text color:yellow
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:PatchID
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:20|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
    Display object or image measurements?:Object
    Select the input objects:Group_centrioles
    Measurement to display:Children_Final_centrioles_Count
    Select the image on which to display the measurements:Overlay
    Text color:cyan
    Name the output image that has the measurements displayed:DisplayImage2
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:COUNT
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:Yes
    Data to export:Final_centrioles
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:Yes
    Data to export:Group_centrioles
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_Nei_
    Overwrite without warning?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No
